WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai
  TaskLogicPath=..\local\example_AindBehaviorDirectedForagingTaskLogic.json
  RigPath=..\local\AindBehaviorDirectedForagingRig.json
  SessionPath=..\local\Session.json

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.AindBehaviorDirectedForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.AindBehaviorDirectedForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=7)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SubjectSchema
    -> PropertyMapping(SessionName(Selector=SessionName)) => #16
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=DataDirectory)
    -> PropertyMapping(RootFolder) => #19
    #16, #19 -> IncludeWorkflow
      Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai
      RootFolder=..\temp_data
      SessionName=test_2026-03-30T175026Z
      SubjectName=LoggingRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartExperiment

    AindBehaviorDirectedForagingDataSchema.RadiusThreshold(Radius=0)
    -> BehaviorSubject CurrentRadiusThreshold

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

    BooleanProperty(Value=false)
    -> Take(Count=1) => #10
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #13
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #16
    #10, #13, #16 -> Merge
    -> BehaviorSubject ExperimentState

    Unit
    -> MulticastSubject StartLogging

GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        BehaviorSubject<Bonsai.Harp.HarpMessage> DelphiControllerCommands => #0
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpDelphiController.PortName)
        -> PropertyMapping(PortName) => #3
        #0, #3 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM3)
        -> PublishSubject DelphiControllerEvents

        ExternalizedMapping(Name(DisplayName=TriggerHarpReadDumpSubjectName))
        -> SubscribeSubject TriggerHarpReadDump
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> MulticastSubject DelphiControllerCommands

        Unit
        -> GroupWorkflow DisableCameraTriggers
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S)
            -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=0))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow DisableFSM
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S)
            -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=0))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow EnableValveLeds
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.EnableValveLeds)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToByte(it)
            -> PropertyMapping(EnableValveLeds) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableValveLedsPayload(EnableValveLeds=1))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMinimumPokeTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MinimumPokeTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MinimumPokeTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinimumPokeTimeUSPayload(MinimumPokeTimeUS=100000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMinimumOdorDeliveryTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MinimumOdorDeliveryTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MinOdorDeliveryTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinOdorDeliveryTimeUSPayload(MinOdorDeliveryTimeUS=500000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetFinalValveEnergizedTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.FinalValveEnergizedTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(FinalValveEnergizedTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFinalValveEnergizedTimeUSPayload(FinalValveEnergizedTimeUS=110000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetVacuumSetupTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.VacuumSetupTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(VacuumSetupTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumSetupTimeUSPayload(VacuumSetupTimeUS=10000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetVacuumCloseTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.VacuumCloseTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(VacuumCloseTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumCloseTimeUSPayload(VacuumCloseTimeUS=20000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetOdorTransitionTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.OdorTransitionTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(OdorTransitionTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateOdorTransitionTimeUSPayload(OdorTransitionTimeUS=20000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMaxOdorDeliveryTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MaxOdorDeliveryTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MaxOdorDeliveryTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMaxOdorDeliveryTimeUSPayload(MaxOdorDeliveryTimeUS=600000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> Delay(DueTime=PT1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=0))
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=1))
        -> MulticastSubject DelphiControllerCommands

        SubscribeSubject DelphiControllerEvents
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
        -> Equal(Operand=WorkflowProperty<System.UInt16>(Value=0))
        -> BehaviorSubject DelphiControllerQueueReady

        Bonsai.Windows.Input.MouseWheel => #30
        FloatProperty(Value=0.01) => #31
        #30, #31 -> CombineLatest
        -> Multiply
        -> PublishSubject WheelDisplacement

        PublishSubject<System.Int32> DeliverPellets

    GroupWorkflow Cameras
        SubscribeSubject RigSchema
        -> Take(Count=1)
        -> MemberSelector(Selector=TriggeredCameraController)
        -> AsyncSubject TriggeredCameraController
        -> MemberSelector(Selector=FrameRate.Value)
        -> AsyncSubject CameraFrameRate

        SubscribeSubject CameraFrameRate
        -> AllenNeuralDynamics.DelphiController.Format(MessageType=Write, Register=AllenNeuralDynamics.DelphiController.FrameRate)
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateCamPinPayload(CamPin=26))
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateDutyCyclePayload(DutyCycle=0.5))
        -> MulticastSubject DelphiControllerCommands

        SubscribeSubject DelphiControllerEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.TimestampedCamPinState)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject FrameEvent

        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> Merge
        -> CreateObservable InstantiateCamera => #21
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ThisCamera

            BooleanProperty(Value=true)
            -> MulticastSubject TriggeredCamerasInitialized
            -> Take(Count=1) => #5
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Value)
            -> PropertyMapping => #8
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
              Gamma(Selector=Gamma)
              PixelFormat(Selector=PixelFormat)
              AdcBitDepth(Selector=AdcBitDepth)
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RegionOfInterest)
            -> InputMapping(Value(Selector="X,Y,Width,Height"))
            -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
            -> PropertyMapping(RegionOfInterest) => #14
            #5, #8, #14 -> LimitedAindSpinnakerCapture => #15
              Index=nil
              SerialNumber=18575294
              ColorProcessing=Default
              ExposureTime=3000
              Gain=0
              Binning=1
              Gamma=nil
              PixelFormat=Mono8
              RegionOfInterest(X=0, Y=0, Width=0, Height=0)
              AdcBitDepth=Bit8
            SubscribeSubject FrameEvent => #16
            #15, #16 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #18
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Key) => #20
            #18, #20 -> WithLatestFrom
            -> WorkflowOutput
        Timer(DueTime=PT0S, Period=PT0.1S) => #22
        #21, #22 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Merge
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

        BehaviorSubject<System.Boolean> TriggeredCamerasInitialized

        SubscribeSubject TriggeredCamerasInitialized
        -> IntProperty(Value=1) => #30
        IntProperty(Value=0)
        -> Take(Count=1) => #32
        #30, #32 -> Merge
        -> Accumulate => #34
        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> MemberSelector(Selector=Count)
        -> PropertyMapping(Value) => #38
        #34, #38 -> GreaterThanOrEqual(Operand=IntProperty(Value=1))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> Delay(DueTime=PT0.1S)
        -> BehaviorSubject TriggeredCamerasReady

    Timer(DueTime=PT0S, Period=PT0.005S) => #2
    -> Unit => #3
    #2 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #5
    #3, #5 -> Zip
    -> Bonsai.Harp.CreateTimestamped => #7
    Annotation Placeholder(Text="Debug harp timebase, will probably come from sniff detector") => #8
    #7, #8 -> BehaviorSubject TimeBase

GroupWorkflow Tracking
    SubscribeSubject TriggeredCamerasStream
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Key)
        -> Equal(Operand=StringProperty(Value=MainCamera))
        -> WorkflowOutput
    -> Merge
    -> MemberSelector(Selector=Value.Image) => #3
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=MaskRegion.MaskPolygon)
    -> PointListToRegion
    -> PropertyMapping(Regions) => #7
    #3, #7 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=9, Y=134)
          Point(X=323, Y=76)
          Point(X=615, Y=70)
          Point(X=719, Y=120)
          Point(X=719, Y=539)
          Point(X=269, Y=539)
          Point(X=0, Y=539)
          Point(X=9, Y=277)
      MaskType=ToZero
      FillValue(Val0=150, Val1=150, Val2=150, Val3=150)
    -> PublishSubject MaskStream
    -> Bonsai.Vision.Threshold(ThresholdValue=11, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> PublishSubject Contour

ExternalizedMapping(StartKey(Category=HotKeys), StopKey(Category=HotKeys), TriggersKey)
-> GroupWorkflow OperationControl
    ExternalizedMapping(Filter(DisplayName=StartKey))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
    -> Unit
    -> Take(Count=1)
    -> MulticastSubject StartExperiment

    ExternalizedMapping(Filter(DisplayName=StopKey))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Shift", SuppressRepetitions=false)
    -> Unit
    -> Take(Count=1)
    -> MulticastSubject EndExperiment

    ExternalizedMapping(Filter(DisplayName=TriggersKey))
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock D P T Shift", SuppressRepetitions=false)
    -> Unit
    -> Take(Count=1)
    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=1))
    -> MulticastSubject DelphiControllerCommands

Defer TaskLogic => #9
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Trials)
    -> Merge
    -> CreateObservable DoTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TrialDefinition

        SubscribeSubject TrialDefinition => #3
        SubscribeSubject DelphiControllerQueueReady
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #3, #5 -> Zip
        -> MemberSelector(Selector=Item1.OdorDefinition.OlfactometerMask)
        -> InputMapping(QueuedOdorMask(Selector=it))
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=1))
        -> MulticastSubject DelphiControllerCommands
        -> Take(Count=1)
        -> AsyncSubject OdorQueued

        SubscribeSubject OdorQueued => #13
        SubscribeSubject TrialTrigger => #14
        #13, #14 -> SubscribeWhen
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateForceFSMPayload(ForceFSM=1))
        -> MulticastSubject DelphiControllerCommands

        SubscribeSubject TrialDefinition
        -> MemberSelector(Selector=TrialTimeout)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT15S)
        -> Unit => #23
        SubscribeSubject WheelDisplacement
        -> Accumulate => #25
        SubscribeSubject TrialDefinition
        -> MemberSelector(Selector=DigThreshold) => #27
        #25, #27 -> WithLatestFrom
        -> Condition DisplacementThresholdReached
            WorkflowInput Source1
            -> GreaterThan
            -> WorkflowOutput
        -> First
        -> SelectMany ThresholdReached
            WorkflowInput Source1

            SubscribeSubject TrialDefinition
            -> MemberSelector(Selector=ThresholdReward)
            -> MulticastSubject DeliverPellets => #3
            SubscribeSubject TrialDefinition
            -> MemberSelector(Selector=ThresholdPunishment)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #7
            #3, #7 -> Delay(DueTime=PT0S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Unit => #32
        #23, #32 -> Merge => #33
        SubscribeSubject TrialTrigger => #34
        #33, #34 -> SubscribeWhen
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TriggerSource) => #6
    -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.RadiusThreshold>)
    -> MulticastSubject CurrentRadiusThreshold
    -> SelectMany RadiusThresholdTrigger => #9
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject RadiusThreshold

        SubscribeSubject Contour
        -> MemberSelector(Selector=Centroid) => #4
        SubscribeSubject RadiusThreshold
        -> MemberSelector(Selector=TriggerCenter) => #6
        #4, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform EuclideanDistance => #8
          Expression: Math.Sqrt(Math.Pow(it.Item2.X - it.Item1.X, 2) + Math.Pow(it.Item2.Y - it.Item1.Y, 2))
        SubscribeSubject RadiusThreshold
        -> MemberSelector(Selector=Radius) => #10
        #8, #10 -> WithLatestFrom
        -> LessThan
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> Unit
        -> WorkflowOutput
    #6 -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.RandomisedTimer>)
    -> SelectMany RandomisedTimerTrigger => #11
        WorkflowInput Source1
        -> Take(Count=1)
        -> MemberSelector(Selector=Distribution)
        -> AsyncSubject TimerDistribution

        SubscribeSubject TimerDistribution => #4
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #6
        #4, #6 -> AindBehaviorDirectedForagingDataSchema.SampleDistribution(RandomSource="")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> SelectMany WaitTimer
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TimeSpan

            Unit => #3
            SubscribeSubject TimeSpan
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT16.048S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> Repeat
        -> WorkflowOutput
    #6 -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.FixedTimer>)
    -> SelectMany FixedTimerTrigger => #13
        WorkflowInput Source1
        -> Take(Count=1)
        -> MemberSelector(Selector=Sequence)
        -> AsyncSubject Sequence

        IntProperty(Value=0)
        -> BehaviorSubject CurrentIndex

        SubscribeSubject TimeBase
        -> MemberSelector(Selector=Seconds)
        -> First
        -> Take(Count=1)
        -> AsyncSubject StartTime

        SubscribeSubject TimeBase
        -> MemberSelector(Selector=Seconds) => #12
        SubscribeSubject StartTime => #13
        #12, #13 -> CombineLatest
        -> Subtract
        -> PublishSubject ElapsedTime

        SubscribeSubject CurrentIndex
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject Sequence
            -> MemberSelector(Selector=Count) => #2
            #0, #2 -> WithLatestFrom
            -> LessThan
            -> WorkflowOutput
        -> SelectMany WaitForTime
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Index

            SubscribeSubject Sequence => #3
            SubscribeSubject Index
            -> PropertyMapping(Value) => #5
            #3, #5 -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject Time

            SubscribeSubject ElapsedTime => #9
            SubscribeSubject Time => #10
            #9, #10 -> WithLatestFrom
            -> GreaterThanOrEqual
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject Index => #14
            #13, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject CurrentIndex
        -> Unit
        -> WorkflowOutput
    #9, #11, #13 -> Merge
    -> PublishSubject TrialTrigger
SubscribeSubject EndExperiment => #10
#9, #10 -> TakeUntil => #11
SubscribeSubject StartExperiment => #12
#11, #12 -> SubscribeWhen

Defer Logging => #14
    SubscribeSubject DelphiControllerEvents => #0
    StringProperty
      Value:
        %YAML 1.1
        ---
        # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
        device: DelphiController
        whoAmI: 1407
        firmwareVersion: "0.0"
        hardwareTargets: "1.0"
        registers:
            ValveState:
                address: 32
                type: U16
                maskType: ValveMask
                access: Write
                description: "Set the enabled/disabled state (enabled = 1) of all valves"
            ValvesSet:
                address: 33
                type: U16
                maskType: ValveMask
                access: Write
                description: "Write a 1 to any bit to enable the corresponding valve."
            ValvesClear:
                address: 34
                type: U16
                maskType: ValveMask
                access: Write
                description: "Write a 1 to any bit to disable the corresponding valve."
            ValveConfig0: &valveConfig
                address: 35
                type: U8
                length: 12
                access: Write
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve0."
            ValveConfig1:
                <<: *valveConfig
                address: 36
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve1."
            ValveConfig2:
                <<: *valveConfig
                address: 37
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve2."
            ValveConfig3:
                <<: *valveConfig
                address: 38
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve3."
            ValveConfig4:
                <<: *valveConfig
                address: 39
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve4."
            ValveConfig5:
                <<: *valveConfig
                address: 40
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve5."
            ValveConfig6:
                <<: *valveConfig
                address: 41
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve6."
            ValveConfig7:
                <<: *valveConfig
                address: 42
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve7."
            ValveConfig8:
                <<: *valveConfig
                address: 43
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve8."
            ValveConfig9:
                <<: *valveConfig
                address: 44
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve9."
            ValveConfig10:
                <<: *valveConfig
                address: 45
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve10."
            ValveConfig11:
                <<: *valveConfig
                address: 46
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve11."
            ValveConfig12:
                <<: *valveConfig
                address: 47
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve12."
            ValveConfig13:
                <<: *valveConfig
                address: 48
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve13."
            ValveConfig14:
                <<: *valveConfig
                address: 49
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve14."
            ValveConfig15:
                <<: *valveConfig
                address: 50
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve15."
            AuxGPIODir:
                address: 51
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: "Specify each auxiliary GPIO pin as an input (0) or output (1)."
            AuxGPIOState:
                address: 52
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: "Set the state (one or off) of any auxiliary GPIO pins specified as outputs."
            AuxGPIOSet:
                address: 53
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: "When writing a 1 to any bit, turn on the specified auxiliary GPIO pins specified as outputs."
            AuxGPIOClear:
                address: 54
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: "When writing a 1 to any bit, Turn off the specified auxiliary GPIO pins specified as outputs."
            AuxGPIOInputRiseEvent:
                address: 55
                type: U8
                maskType: AuxGPIOMask
                access: Event
                description: ""
            AuxGPIOInputFallEvent:
                address: 56
                type: U8
                maskType: AuxGPIOMask
                access: Event
                description: ""
            AuxGPIORisingInputs:
                address: 57
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: ""
            AuxGPIOFallingInputs:
                address: 58
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: ""
            PokePin:
                address: 59
                type: U8
                access: Write
                description: "which poke ports are active."
            PokePinInverted:
                address: 60
                type: U8
                access: Write
                description: "Which poke ports are inverted (i.e: transition from HIGH to LOW when a poke occurs)."
            PokeState:
                address: 61
                type: U8
                access: Event
                description: "The state of the poke port. An event will be triggered given a poke/ beam break that is greater than the min poke time."
            RawPokeState:
                address: 62
                type: U8
                access: Event
                description: "The raw state of the poke pin. Events will be triggered at the onset of a beam break (1) and offset (0)."
            PokeDometer:
                address: 63
                type: U32
                access: Read
                description: "number of mouse pokes per port since boot or reset."
            FSMState:
                address: 64
                type: U8
                access: Write
                description: "Enable (1) (aka reset) or Disable (0) the poke handling state machine. Note that CurrentOdorIndex must be specified first. Disabling and then enabling a previously-enabled FSM will reset it to its starting state."
            ForceFSM:
                address: 65
                type: U8
                access: Write
                description: "Force the poke handling state machine to iterate as if handling a mouse poke. PokeDometers are not incremented."
            QueuedOdorIndex:
                address: 66
                type: S8
                access: Write
                description: "Queued odor (value: odor valve index) that will be delievered to the odor port given a register poke. After an odor has been dispensed, the register will be set to -1, which indicates that a new odor is needed"
            VacuumCloseTimeUS:
                address: 67
                type: U32
                access: Write
                description: "Time alotted (in microseconds) for the vacuum valve to close."
            MinOdorDeliveryTimeUS:
                address: 68
                type: U32
                access: Write
                description: "Minimum time alotted (in microseconds) for the odor delivery state."
            MaxOdorDeliveryTimeUS:
                address: 69
                type: U32
                access: Write
                description: "Maximum time alotted (in microseconds) for the odor delivery state."
            OdorTransitionTimeUS:
                address: 70
                type: U32
                access: Write
                description: "Time alotted (in microseconds) before the vacuum turns on to remove the current odor."
            VacuumSetupTimeUS:
                address: 71
                type: U32
                access: Write
                description: "Time alotted (in microseconds) for the vacuum to open."
            FinalValveEnergizedTimeUS:
                address: 72
                type: U32
                access: Write
                description: "Time alotted (in microseconds) for the final valve to open and remain on."
            MinimumPokeTimeUS:
                address: 73
                type: U32
                access: Write
                description: "Minimum time (in microseconds) necessary for a mouse poke port beam to be broken before being interpretted as a poke."
            CamPin:
                address: 74
                type: U8
                access: Write
                description: "The GPIO output pin used for camera triggering. Default pin is 26."
            CamPinState:
                address: 75
                type: U8
                access: Event
                description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
            FrameRate:
                address: 76
                type: U32
                access: Write
                description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
            DutyCycle:
                address: 77
                type: Float
                access: Write
                description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
            EnableCamTrigger:
                address: 78
                type: U8
                access: Write
                description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
            EnableValveLeds:
                address: 79
                type: U8
                access: Write
                description: "Enable (1) and disable (0) valve LEDs."

        groupMasks:
            ValveMask:
                description: "Valve that can be configured/enabled/disabled"
                values:
                    Valve0: 0x0
                    Valve1: 0x1
                    Valve2: 0x2
                    Valve3: 0x3
                    Valve4: 0x4
                    Valve5: 0x5
                    Valve6: 0x6
                    Valve7: 0x7
                    Valve8: 0x8
                    Valve9: 0x9
                    Valve10: 0xA
                    Valve11: 0xB
                    Valve12: 0xC
                    Valve13: 0xD
                    Valve14: 0xE
                    Valve15: 0xF
            AuxGPIOMask:
                description: "Auxiliary GPIO index."
                values:
                    AuxGPIO0: 0x0
                    AuxGPIO1: 0x1
                    AuxGPIO2: 0x2
                    AuxGPIO3: 0x3
                    AuxGPIO4: 0x4
                    AuxGPIO5: 0x5
                    AuxGPIO6: 0x6
                    AuxGPIO7: 0x7
    -> PropertyMapping(DeviceMetadata) => #2
    #0, #2 -> IncludeWorkflow
      Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
      DeviceMetadata:
        %YAML 1.1
        ---
        # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
        device: DelphiController
        whoAmI: 1407
        firmwareVersion: "0.0"
        hardwareTargets: "1.0"
        registers:
            ValveState:
                address: 32
                type: U16
                maskType: ValveMask
                access: Write
                description: "Set the enabled/disabled state (enabled = 1) of all valves"
            ValvesSet:
                address: 33
                type: U16
                maskType: ValveMask
                access: Write
                description: "Write a 1 to any bit to enable the corresponding valve."
            ValvesClear:
                address: 34
                type: U16
                maskType: ValveMask
                access: Write
                description: "Write a 1 to any bit to disable the corresponding valve."
            ValveConfig0: &valveConfig
                address: 35
                type: U8
                length: 12
                access: Write
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve0."
            ValveConfig1:
                <<: *valveConfig
                address: 36
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve1."
            ValveConfig2:
                <<: *valveConfig
                address: 37
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve2."
            ValveConfig3:
                <<: *valveConfig
                address: 38
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve3."
            ValveConfig4:
                <<: *valveConfig
                address: 39
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve4."
            ValveConfig5:
                <<: *valveConfig
                address: 40
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve5."
            ValveConfig6:
                <<: *valveConfig
                address: 41
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve6."
            ValveConfig7:
                <<: *valveConfig
                address: 42
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve7."
            ValveConfig8:
                <<: *valveConfig
                address: 43
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve8."
            ValveConfig9:
                <<: *valveConfig
                address: 44
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve9."
            ValveConfig10:
                <<: *valveConfig
                address: 45
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve10."
            ValveConfig11:
                <<: *valveConfig
                address: 46
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve11."
            ValveConfig12:
                <<: *valveConfig
                address: 47
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve12."
            ValveConfig13:
                <<: *valveConfig
                address: 48
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve13."
            ValveConfig14:
                <<: *valveConfig
                address: 49
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve14."
            ValveConfig15:
                <<: *valveConfig
                address: 50
                description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve15."
            AuxGPIODir:
                address: 51
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: "Specify each auxiliary GPIO pin as an input (0) or output (1)."
            AuxGPIOState:
                address: 52
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: "Set the state (one or off) of any auxiliary GPIO pins specified as outputs."
            AuxGPIOSet:
                address: 53
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: "When writing a 1 to any bit, turn on the specified auxiliary GPIO pins specified as outputs."
            AuxGPIOClear:
                address: 54
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: "When writing a 1 to any bit, Turn off the specified auxiliary GPIO pins specified as outputs."
            AuxGPIOInputRiseEvent:
                address: 55
                type: U8
                maskType: AuxGPIOMask
                access: Event
                description: ""
            AuxGPIOInputFallEvent:
                address: 56
                type: U8
                maskType: AuxGPIOMask
                access: Event
                description: ""
            AuxGPIORisingInputs:
                address: 57
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: ""
            AuxGPIOFallingInputs:
                address: 58
                type: U8
                maskType: AuxGPIOMask
                access: Write
                description: ""
            PokePin:
                address: 59
                type: U8
                access: Write
                description: "which poke ports are active."
            PokePinInverted:
                address: 60
                type: U8
                access: Write
                description: "Which poke ports are inverted (i.e: transition from HIGH to LOW when a poke occurs)."
            PokeState:
                address: 61
                type: U8
                access: Event
                description: "The state of the poke port. An event will be triggered given a poke/ beam break that is greater than the min poke time."
            RawPokeState:
                address: 62
                type: U8
                access: Event
                description: "The raw state of the poke pin. Events will be triggered at the onset of a beam break (1) and offset (0)."
            PokeDometer:
                address: 63
                type: U32
                access: Read
                description: "number of mouse pokes per port since boot or reset."
            FSMState:
                address: 64
                type: U8
                access: Write
                description: "Enable (1) (aka reset) or Disable (0) the poke handling state machine. Note that CurrentOdorIndex must be specified first. Disabling and then enabling a previously-enabled FSM will reset it to its starting state."
            ForceFSM:
                address: 65
                type: U8
                access: Write
                description: "Force the poke handling state machine to iterate as if handling a mouse poke. PokeDometers are not incremented."
            QueuedOdorIndex:
                address: 66
                type: S8
                access: Write
                description: "Queued odor (value: odor valve index) that will be delievered to the odor port given a register poke. After an odor has been dispensed, the register will be set to -1, which indicates that a new odor is needed"
            VacuumCloseTimeUS:
                address: 67
                type: U32
                access: Write
                description: "Time alotted (in microseconds) for the vacuum valve to close."
            MinOdorDeliveryTimeUS:
                address: 68
                type: U32
                access: Write
                description: "Minimum time alotted (in microseconds) for the odor delivery state."
            MaxOdorDeliveryTimeUS:
                address: 69
                type: U32
                access: Write
                description: "Maximum time alotted (in microseconds) for the odor delivery state."
            OdorTransitionTimeUS:
                address: 70
                type: U32
                access: Write
                description: "Time alotted (in microseconds) before the vacuum turns on to remove the current odor."
            VacuumSetupTimeUS:
                address: 71
                type: U32
                access: Write
                description: "Time alotted (in microseconds) for the vacuum to open."
            FinalValveEnergizedTimeUS:
                address: 72
                type: U32
                access: Write
                description: "Time alotted (in microseconds) for the final valve to open and remain on."
            MinimumPokeTimeUS:
                address: 73
                type: U32
                access: Write
                description: "Minimum time (in microseconds) necessary for a mouse poke port beam to be broken before being interpretted as a poke."
            CamPin:
                address: 74
                type: U8
                access: Write
                description: "The GPIO output pin used for camera triggering. Default pin is 26."
            CamPinState:
                address: 75
                type: U8
                access: Event
                description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
            FrameRate:
                address: 76
                type: U32
                access: Write
                description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
            DutyCycle:
                address: 77
                type: Float
                access: Write
                description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
            EnableCamTrigger:
                address: 78
                type: U8
                access: Write
                description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
            EnableValveLeds:
                address: 79
                type: U8
                access: Write
                description: "Enable (1) and disable (0) valve LEDs."

        groupMasks:
            ValveMask:
                description: "Valve that can be configured/enabled/disabled"
                values:
                    Valve0: 0x0
                    Valve1: 0x1
                    Valve2: 0x2
                    Valve3: 0x3
                    Valve4: 0x4
                    Valve5: 0x5
                    Valve6: 0x6
                    Valve7: 0x7
                    Valve8: 0x8
                    Valve9: 0x9
                    Valve10: 0xA
                    Valve11: 0xB
                    Valve12: 0xC
                    Valve13: 0xD
                    Valve14: 0xE
                    Valve15: 0xF
            AuxGPIOMask:
                description: "Auxiliary GPIO index."
                values:
                    AuxGPIO0: 0x0
                    AuxGPIO1: 0x1
                    AuxGPIO2: 0x2
                    AuxGPIO3: 0x3
                    AuxGPIO4: 0x4
                    AuxGPIO5: 0x5
                    AuxGPIO6: 0x6
                    AuxGPIO7: 0x7
      Modality=Behavior
      DeviceName=DelphiController

    SubscribeSubject TriggeredCameraController
    -> MemberSelector(Selector=Cameras)
    -> Merge => #6
    -> MemberSelector(Selector=Value.VideoWriter)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
    -> AindBehaviorDirectedForagingDataSchema.MatchVideoWriter(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.VideoWriterFfmpeg>) => #9
    #6 -> MemberSelector(Selector=Key) => #10
    #9, #10 -> WithLatestFrom
    -> CreateObservable FfmpegWriter
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject This

        SubscribeSubject This
        -> MemberSelector(Selector=Item2)
        -> AsyncSubject ThisCameraName

        SubscribeSubject This
        -> MemberSelector(Selector=Item1)
        -> AsyncSubject ThisWriter

        SubscribeSubject TriggeredCamerasStream
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject ThisCameraName => #2
            #1, #2 -> CombineLatest
            -> Equal
            -> WorkflowOutput
        -> Take(Count=1)
        -> Merge => #12
        SubscribeSubject ThisCameraName
        -> PropertyMapping(LogName) => #14
        SubscribeSubject ThisWriter
        -> MemberSelector(Selector=ContainerExtension)
        -> PropertyMapping(VideoExtension) => #17
        SubscribeSubject ThisWriter
        -> PropertyMapping(OutputArguments(Selector=OutputArguments), InputArguments(Selector=InputArguments), FrameRate(Selector=FrameRate)) => #19
        #12, #14, #17, #19 -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai
          Modality=BehaviorVideos
          LogName=MainCamera
          VideoExtension=mp4
          OutputArguments: -vf "scale=out_range=full,setparams=range=full:colorspace=bt709:color_primaries=bt709:color_trc=linear" -c:v h264_nvenc -pix_fmt yuv420p -color_range 2 -colorspace bt709 -color_trc linear -tune hq -preset p3 -rc vbr -cq 18 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M -f matroska -write_crc32 0
          InputArguments="-colorspace bt709 -color_primaries bt709 -color_range 2 -color_trc linear"
          Verbosity=Warning
          FrameRate=60
    -> Merge

    SubscribeSubject TriggeredCameraController
    -> MemberSelector(Selector=Cameras)
    -> Merge => #16
    -> MemberSelector(Selector=Value.VideoWriter)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
    -> AindBehaviorDirectedForagingDataSchema.MatchVideoWriter(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.VideoWriterOpenCv>) => #19
    #16 -> MemberSelector(Selector=Key) => #20
    #19, #20 -> WithLatestFrom
    -> CreateObservable OpenCvWriter
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject This

        SubscribeSubject This
        -> MemberSelector(Selector=Item2)
        -> AsyncSubject ThisCameraName

        SubscribeSubject This
        -> MemberSelector(Selector=Item1)
        -> AsyncSubject ThisWriter

        SubscribeSubject TriggeredCamerasStream
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject ThisCameraName => #2
            #1, #2 -> CombineLatest
            -> Equal
            -> WorkflowOutput
        -> Take(Count=1)
        -> Merge => #12
        SubscribeSubject ThisCameraName
        -> PropertyMapping(LogName) => #14
        SubscribeSubject ThisWriter
        -> MemberSelector(Selector=ContainerExtension)
        -> PropertyMapping(VideoExtension) => #17
        SubscribeSubject ThisWriter
        -> PropertyMapping(FrameRate(Selector=FrameRate), FourCC(Selector=FourCC)) => #19
        #12, #14, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSpinnakerOpenCv.bonsai, Modality=BehaviorVideos, LogName=FaceCamera, VideoExtension=mp4, FrameRate=30, FourCC=FMP4)
    -> Merge
SubscribeSubject EndExperiment => #15
#14, #15 -> TakeUntil => #16
SubscribeSubject StartLogging => #17
#16, #17 -> SubscribeWhen

Disable SubscribeSubject TriggeredCamerasStream
-> Disable Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Key)
    -> Equal(Operand=StringProperty(Value=MainCamera))
    -> WorkflowOutput
-> Disable Merge
-> Disable MemberSelector(Selector=Value.Image)
-> Disable PublishSubject MainCameraStream
-> Disable VisualizerMapping => #24
Disable SubscribeSubject MaskStream
-> Disable VisualizerMapping => #26
Disable Timer(DueTime=PT0S, Period=PT0.05S) => #27
Disable Bonsai.Vision.Drawing.CreateCanvas(Size(Width=720, Height=540), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #28
#27, #28 -> Disable WithLatestFrom
-> Disable MemberSelector(Selector=Item2) => #30
Disable SubscribeSubject MainCameraStream
-> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
-> Disable PropertyMapping(Image) => #33
#30, #33 -> Disable Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=0, Height=0), Interpolation=Linear) => #34
Disable SubscribeSubject CurrentRadiusThreshold
-> Disable MemberSelector(Selector=TriggerCenter)
-> Disable InputMapping(X(Selector=X), Y(Selector=Y))
-> Disable Bonsai.Vision.CreatePoint2f(X=333, Y=329)
-> Disable PropertyMapping(Center) => #39
Disable SubscribeSubject CurrentRadiusThreshold
-> Disable MemberSelector(Selector=Radius)
-> Disable PropertyMapping(Axes(Selector="it,it")) => #42
#34, #39, #42 -> Disable Bonsai.Vision.Drawing.Ellipse => #43
  Center(X=333, Y=329)
  Axes(Width=60, Height=60)
  Angle=0
  StartAngle=0
  EndAngle=360
  Color(Val0=0, Val1=255, Val2=0, Val3=0)
  Thickness=1
  LineType=Connected8
  Shift=0
Disable SubscribeSubject Contour
-> Disable MemberSelector(Selector=Centroid)
-> Disable PropertyMapping(Center) => #46
#43, #46 -> Disable Bonsai.Vision.Drawing.Ellipse
  Center(X=491, Y=284)
  Axes(Width=10, Height=10)
  Angle=0
  StartAngle=0
  EndAngle=360
  Color(Val0=0, Val1=0, Val2=255, Val3=0)
  Thickness=1
  LineType=Connected8
  Shift=0
-> Disable Bonsai.Vision.Drawing.DrawCanvas
-> Disable VisualizerMapping => #49
#24, #26, #49 -> Disable Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
